PsychoPy2experiment version="2024.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2048, 1152]
  expName = eriksen_flanker_markers
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent flankerStim
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimulus
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent trial_counter
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trials.thisN+1) + '/' + str(trials.nTotal)
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    CodeComponent markers
      Code Type = Auto->JS
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      Begin Experiment:
        """ Initialize marker_manager

        At the beginning of the experiment, the marker device is found and the
        marker_manager is initialized.

        See example.py in the python-markers repo for more information.

        """

        # Import modules required for current example.
        import python_markers.marker_management as mark
        import python_markers.GS_timing as timing

        # Find the marker device. In the current example, a UsbParMarker is used.
        # When the marker device is not found, an error is thrown.
        device_info = mark.find_device(device_type='UsbParMarker', fallback_to_fake=False)

        # Initialize the marker_manager. Use the device_info obtained previously. In the
        # current example, the task will not crash when a marker error occurs (see
        # example.py for more info).
        cur_device_type = device_info['device']['Device']
        cur_device_address = device_info['com_port']
        marker_manager = mark.MarkerManager(cur_device_type, cur_device_address, crash_on_marker_errors=False)

        # Send a short pulse of 255 to check that markers are sent, then reset to 0.
        marker_manager.set_value(255)
        timing.delay(100)
        marker_manager.set_value(0)
      Begin Routine:
        """ Set marker value

        See example.py in the python-markers repo for more information.

        """

        # In the current example, the marker value is set at the beginning of the
        # trial object. The marker value is specified in conditions.xlsx.
        marker_manager.set_value(marker)
      End Experiment:
        """ Wrap up marker_manager

        At the end of the experiment, the marker table is saved and the marker
        device is closed.

        See example.py in the python-markers repo for more information.

        """

        # Save the marker table. In the current example:
        # - The filename of the marker table is the same as the default data filename,
        #   appended with '_marker_table'.
        # - The location of the marker table is the same as the location of the other
        #   data (in the data folder in the current working directory).
        # - Additional information is saved in the header of the marker table file,
        #   namely the participant and experiment name.
        cur_filename =  expInfo['participant'] + '_' + expName + '_' + expInfo['date'] + '_marker_table'
        cur_location = os.getcwd() + '\data'
        cur_more_info = {'participant': expInfo['participant'], 'experiment': expName}
        marker_manager.save_marker_table(cur_filename, cur_location, cur_more_info)

        # Close marker device.
        marker_manager.close()
      End Routine:
        """ Reset marker value

        See example.py in the python-markers repo for more information.

        """

        # In the current example, the marker value is reset (set to 0) at the end of the
        # trial object.
        marker_manager.set_value(0)
  Routine instructions
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    TextComponent instructionsTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a demo of a basic flanker task.

        Use the left and right arrow keys to indicate the direction the middle arrow is pointing in.

        Be as fast and accurate as possible.

        Press space to start
    KeyboardComponent startKey
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent endMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $'You scored ' + str(correct_counter) + '/' + str(trials.nTotal) + ' correct!' 
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_counter = 0
      Begin Routine:
        if key_resp.corr:
            fb = 'Correct!'
            fbcol = 'green'
            correct_counter += 1
        else:
            fb = 'Incorrect'
            fbcol = 'black'
    TextComponent text
      color [set every repeat] = $fbcol
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': '<<<<<', 'condition': 'congruent', 'response': 'left', 'marker': 1},
      {'stimulus': '>>>>>', 'condition': 'congruent', 'response': 'right', 'marker': 1},
      {'stimulus': '<<<<<', 'condition': 'congruent', 'response': 'left', 'marker': 1},
      {'stimulus': '>>>>>', 'condition': 'congruent', 'response': 'right', 'marker': 1},
      {'stimulus': '<<<<<', 'condition': 'congruent', 'response': 'left', 'marker': 1},
      {'stimulus': '>>>>>', 'condition': 'congruent', 'response': 'right', 'marker': 1},
      {'stimulus': '<<<<<', 'condition': 'congruent', 'response': 'left', 'marker': 1},
      {'stimulus': '>>>>>', 'condition': 'congruent', 'response': 'right', 'marker': 1},
      {'stimulus': '<<><<', 'condition': 'incongruent', 'response': 'right', 'marker': 2},
      {'stimulus': '>><>>', 'condition': 'incongruent', 'response': 'left', 'marker': 2}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine end
